PsychoPy2experiment version="2020.2.5"
Settings
  Experiment info = {'participant': '', 'run_number': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  color = $[-1,-1,-1]
  expName = regulation_of_craving
  logging level = debug
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Routines
  Routine trial
    PolygonComponent fixation
      durationEstim = 1
      fillColor = $[1,1,1]
      saveStartStop = False
      shape = cross
      size = (48, 48)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter_duration
      units = pix
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    PolygonComponent background
      fillColor [set every repeat] = $background_color
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (window_width, window_height)
      startEstim = 1
      startVal [time (s)] = $jitter_duration
      stopVal [duration (s)] = 11
      units = pix
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    PolygonComponent black_background
      fillColor = $[-1,-1,-1]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (window_width - 150, window_height - 150)
      startEstim = 1
      startVal [time (s)] = $jitter_duration
      stopVal [duration (s)] = 11
      units = pix
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    TextComponent regulate_look
      font = Helvetica
      letterHeight = 0.075
      startEstim = 1
      startVal [time (s)] = $jitter_duration
      stopVal [duration (s)] = 2
      text [set every repeat] = $regulate_or_look
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    ImageComponent stimulus
      image [set every repeat] = $image_file
      startEstim = 3
      startVal [time (s)] = $jitter_duration + 2
      stopVal [duration (s)] = 5.0
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    TextComponent rating_text
      font = Helvetica
      letterHeight = 0.075
      pos = (0, 0.1)
      startEstim = 8
      startVal [time (s)] = $jitter_duration+7
      stopVal [duration (s)] = 4.0
      text = How much do you desire the item shown in the last picture?
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # Set depth explicitly to workaround https://github.com/psychopy/psychopy/issues/3154
        # Slider component not rendered in routine order
        stim_rating.depth = -30
      Each Frame:
        # Update marker position and slider rating
        # when there are keypresses of the 1, 2, 3, 4, 5 buttons
        rating_keys = ['1', '2', '3', '4', '5']
        if stim_keyboard.keys in rating_keys:
            stim_rating.markerPos = int(stim_keyboard.keys)
            # confirm rating by setting to current markerPos
            stim_rating.rating = stim_rating.markerPos
    SliderComponent stim_rating
      forceEndRoutine = False
      granularity = 0
      labels = ('No Desire', 'Strong Desire')
      pos = (0, -0.2)
      size = (1.0, 0.025)
      startEstim = 8
      startVal [time (s)] = $jitter_duration+7
      stopVal [duration (s)] = 4
      styles = ('triangleMarker',)
      ticks = (1, 2, 3, 4, 5)
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    KeyboardComponent stim_keyboard
      allowedKeys = '1', '2', '3', '4', '5'
      forceEndRoutine = False
      startEstim = 8
      startVal [time (s)] = $jitter_duration+7
      stopVal [duration (s)] = 4
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  Routine instructions
    TextComponent start_text
      durationEstim = 2
      font = Helvetica
      letterHeight = 0.075
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $start_text_str
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    KeyboardComponent start_trigger
      durationEstim = 2
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end
    TextComponent end_text
      font = Helvetica
      letterHeight = 0.075
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = The task is now complete.
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  Routine setup
    CodeComponent get_window_size
      Code Type = Auto->JS
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      Begin Experiment:
        # Get window width and height
        window_width = win.clientSize[0]
        window_height = win.clientSize[1]
    CodeComponent get_conditions_file
      Code Type = Auto->JS
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      Begin Experiment:
        def is_mri_session(session: str) -> bool:
            return session == '1' or session == '2'


        participant = expInfo['participant']
        run_number = expInfo['run_number']

        #
        # Determine the input conditions file based on the session number.
        # Run numbers 1 and 2 are in the MRI scanner.
        # Run numbers 3, 4, and 5 are behavorial, not performed in the scanner.
        # Run number 0 is a practice run that only has a couple of trials.
        # Display different start text / instructions for behavioral sessions compared with MRI scan sessions.
        if is_mri_session(run_number):
            start_text_str = 'Calibrating scanner.\nPlease hold VERY still.'
        else:
            start_text_str = 'The task is about to begin.\nGet ready!'
        conditions_file = 'ROC_Session' + str(run_number) + '.csv'
  Routine ratings
Flow
  Routine setup
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $conditions_file
    loopType = sequential
    nReps = 1
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    Routine trial
  LoopTerminator trials
  Routine end
